CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>[0-9]*)_(?P<Condition>.*)_(?P<Type>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Mask")
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    Name to assign these objects:MASK
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "Raw")
    Name to assign these images:RAW
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuclei")
    Name to assign these images:NUCLEI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Phallo")
    Name to assign these images:PHALLO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:NUCLEI
    Name the output image:Filterednuclei
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Filterednuclei
    Name the primary objects to be identified:IdentifyPrimaryObjectsNUCLEI
    Typical diameter of objects, in pixel units (Min,Max):100,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RescaleIntensity:[module_num:7|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
    Select the input image:PHALLO
    Name the output image:RescaleIntensityPhallo
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.3
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:IdentifyPrimaryObjectsNUCLEI
    Name the objects to be identified:IdentifySecondaryObjectsPHALLO
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaleIntensityPhallo
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:9|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
    Select objects to be masked:IdentifySecondaryObjectsPHALLO
    Name the masked objects:MaskCell
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondaryObjectsPHALLO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:10|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
    Select objects to be masked:MASK
    Name the masked objects:Mask_Endo
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskCell
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:11|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
    Parent objects:MaskCell
    Child objects:Mask_Endo
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Endosomes_in_Cells
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:RAW
    Select objects to measure:IdentifySecondaryObjectsPHALLO, MaskCell, Mask_Endo

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:IdentifySecondaryObjectsPHALLO, MaskCell, Mask_Endo
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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